<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.7.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:Bonsai.Numerics.Distributions;assembly=Bonsai.Numerics"
                 xmlns:al="clr-namespace:Bonsai.Audio;assembly=Bonsai.Audio"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:num="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateWindow">
          <gl:Width>640</gl:Width>
          <gl:Height>480</gl:Height>
          <gl:VSync>On</gl:VSync>
          <gl:SwapSync>false</gl:SwapSync>
          <gl:ClearColor>Black</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:CursorVisible>true</gl:CursorVisible>
          <gl:Location xsi:nil="true" />
          <gl:WindowBorder>Resizable</gl:WindowBorder>
          <gl:WindowState>Normal</gl:WindowState>
          <gl:DisplayDevice>Primary</gl:DisplayDevice>
          <gl:TargetRenderFrequency>0</gl:TargetRenderFrequency>
          <gl:TargetUpdateFrequency xsi:nil="true" />
          <gl:RenderState />
          <gl:GraphicsMode>
            <gl:ColorFormat>
              <gl:Red>8</gl:Red>
              <gl:Green>8</gl:Green>
              <gl:Blue>8</gl:Blue>
              <gl:Alpha>8</gl:Alpha>
            </gl:ColorFormat>
            <gl:Depth>16</gl:Depth>
            <gl:Stencil>0</gl:Stencil>
            <gl:Samples>0</gl:Samples>
            <gl:AccumulatorFormat>
              <gl:Red>0</gl:Red>
              <gl:Green>0</gl:Green>
              <gl:Blue>0</gl:Blue>
              <gl:Alpha>0</gl:Alpha>
            </gl:AccumulatorFormat>
            <gl:Buffers>2</gl:Buffers>
            <gl:Stereo>false</gl:Stereo>
          </gl:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="res:LoadResources" />
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderFrame" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.OrthographicView.bonsai">
        <Left>-180</Left>
        <Right>180</Right>
        <Bottom>-90</Bottom>
        <Top>90</Top>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Draw</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.SphereMapping.bonsai">
        <FaceSize xsi:nil="true" />
        <ClearColor>Gray</ClearColor>
        <Width xsi:nil="true" />
        <Height xsi:nil="true" />
        <RotationZ>0</RotationZ>
        <RotationY>0</RotationY>
        <RotationX>0</RotationX>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.ViewWindow.bonsai">
        <Width>20</Width>
        <Height>15</Height>
        <Rotation>
          <X>0</X>
          <Y>0</Y>
          <Z>0</Z>
        </Rotation>
        <Translation>
          <X>0</X>
          <Y>0</Y>
          <Z>-10</Z>
        </Translation>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="IncludeWorkflow" Path="BonVision:Environment.GammaCorrection.bonsai">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:SelectMany">
          <Name>Trial</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="io:CsvWriter">
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        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>None</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>Lick</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>lick_times.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>true</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>true</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Draw</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>true</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>drawTime.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>true</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>true</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:Condition">
          <Name>IsGoStim</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:Condition">
          <Name>IsNoGoStim</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:CreateObservable">
          <Name>LoadAudio</Name>
          <Description />
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:ReplaySubject">
          <Name>AudioStimuli</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:CreateObservable">
          <Name>LoadGratingsCsv</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:Condition">
          <Name>IsGoStim</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:Condition">
          <Name>IsNoGoStim</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>LoadGratingsCsv</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:ReplaySubject">
          <Name>GratingsStimuli</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="io:CsvWriter">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:Condition">
          <Name>IsGoStim</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:CreateObservable">
          <Name>LoadGratingsCsv</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:Condition">
          <Name>IsNoGoStim</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:CreateObservable">
          <Name>LoadGratingsCsv</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:ReplaySubject">
          <Name>GratingsStimuli</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="io:CsvWriter">
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        </Builder>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>stimuli\gratings\0.csv</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>GoFilename</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>NOGOAUDIO</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>NoGoAudioFlag</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>GOGRATINGS</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>GoGratingsFlag</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>NOGOGRATINGS</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>NoGoGratingsFlag</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>GOAUDIO</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>GoAudioFlag</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="num:CreateRandom">
          <num:Seed xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>Random</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>GratingsStimuli</Name>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>rrurt.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>true</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>true</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>AudioStimuli</Name>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>trrurt.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>true</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>true</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:EnumerateFiles">
          <io:Path>stimuli\audio</io:Path>
          <io:SearchPattern>*.wav</io:SearchPattern>
          <io:SearchOption>TopDirectoryOnly</io:SearchOption>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>IsGoStim</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>GoFilename</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Value" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="StringProperty">
                <Value>stimuli\gratings\0.csv</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="3" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>GOAUDIO</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>IsNoGoStim</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>GoFilename</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Value" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="NotEqual">
              <Operand xsi:type="StringProperty">
                <Value>stimuli\gratings\0.csv</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="3" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>NOGOAUDIO</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="rx:CreateObservable">
        <Name>LoadAudio</Name>
        <Description />
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="al:AudioReader">
                <al:FileName>stimuli\audio\0.wav</al:FileName>
                <al:BufferLength>10</al:BufferLength>
                <al:SampleRate>0</al:SampleRate>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Concat" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="rx:ReplaySubject">
        <Name>AudioStimuli</Name>
        <rx:BufferSize xsi:nil="true" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Count" />
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>AudioCount</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:EnumerateFiles">
          <io:Path>stimuli\gratings</io:Path>
          <io:SearchPattern>*.csv</io:SearchPattern>
          <io:SearchOption>TopDirectoryOnly</io:SearchOption>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:CreateObservable">
        <Name>LoadGratingsCsv</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="io:CsvReader">
              <io:FileName>stimuli\gratings\2.csv</io:FileName>
              <io:ListSeparator>,</io:ListSeparator>
              <io:SkipRows>1</io:SkipRows>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>new(
double.Parse(it[0]) * Math.PI / 180 as Orientation,
double.Parse(it[1]) as Speed,
double.Parse(it[2]) as Contrast,
double.Parse(it[3]) as Duration,
double.Parse(it[4]) as Angle
)</scr:Expression>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Concat" />
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>IsGoStim</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>GoFilename</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Value" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="StringProperty">
                <Value>stimuli\gratings\0.csv</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="3" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>GOGRATINGS</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>IsNoGoStim</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>GoFilename</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Value" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="NotEqual">
              <Operand xsi:type="StringProperty">
                <Value>stimuli\gratings\0.csv</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="3" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>NOGOGRATINGS</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>LoadGratingsCsv</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="rx:ReplaySubject">
        <Name>GratingsStimuli</Name>
        <rx:BufferSize xsi:nil="true" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Count" />
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>GratingsCount</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="Add" />
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>StimuliCount</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>AudioCount</Name>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>audio_count.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>true</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>true</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>GratingsCount</Name>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>gratings_count.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>true</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>true</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>StimuliCount</Name>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>stimuli_count.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>true</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>true</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>StimuliCount</Name>
      </Expression>
      <Expression xsi:type="Subtract">
        <Operand xsi:type="IntProperty">
          <Value>1</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Upper" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:CreateDiscreteUniform">
          <p1:Lower>0</p1:Lower>
          <p1:Upper>4</p1:Upper>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>StimIndices</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:Timer">
          <gl:DueTime>PT2S</gl:DueTime>
          <gl:Period>PT3S</gl:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>Trial</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>AudioStimuli</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="num:Permutation" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>StimIndices</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:Sample" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>HasGratingsFlag</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>GratingsCount</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Value" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="LessThan">
                    <Operand xsi:type="IntProperty">
                      <Value>3</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="3" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>GratingsStimuli</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="num:Permutation" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>HasGoGratingFlag</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>GoGratingsFlag</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Value" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="StringProperty">
                      <Value>GOGRATINGS</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="4" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>GoGratingsTrial</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:Timer">
                      <gl:DueTime>PT2S</gl:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Draw</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>GoPresented</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:Delay">
                      <gl:DueTime>PT1S</gl:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Lick</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>GoPresented</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:TimedGate">
                      <rx:TimeSpan>PT0.1S</rx:TimeSpan>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Amb" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Throttle">
                      <rx:DueTime>PT1S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Throttle">
                      <rx:DueTime>PT2S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>1</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>WaterReward</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="rx:Sink">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item2</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="gl:BindTexture">
                            <gl:TextureSlot>Texture0</gl:TextureSlot>
                            <gl:ShaderName>Image</gl:ShaderName>
                            <gl:TextureTarget>Texture2D</gl:TextureTarget>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item1</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Angle" Selector="Angle" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawGratings.bonsai">
                    <LocationX>0</LocationX>
                    <LocationY>0</LocationY>
                    <Layer>0</Layer>
                    <Angle>0</Angle>
                    <SpatialFrequency>10</SpatialFrequency>
                    <TemporalFrequency>0</TemporalFrequency>
                    <Phase>0</Phase>
                    <SquareWave>false</SquareWave>
                    <Contrast>1</Contrast>
                    <DutyCycle xsi:nil="true" />
                    <Radius>1</Radius>
                    <Aperture>0</Aperture>
                    <Opacity>1</Opacity>
                    <ExtentX>50</ExtentX>
                    <ExtentY>50</ExtentY>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>GoPresented</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:TakeUntil" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Last" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>GOGRATINGS</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="22" Label="Source2" />
                  <Edge From="1" To="15" Label="Source1" />
                  <Edge From="1" To="20" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="9" Label="Source2" />
                  <Edge From="5" To="7" Label="Source1" />
                  <Edge From="6" To="7" Label="Source2" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="8" To="11" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="25" Label="Source2" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="14" To="15" Label="Source2" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="18" To="19" Label="Source1" />
                  <Edge From="19" To="20" Label="Source1" />
                  <Edge From="20" To="21" Label="Source1" />
                  <Edge From="21" To="22" Label="Source1" />
                  <Edge From="22" To="23" Label="Source1" />
                  <Edge From="23" To="24" Label="Source1" />
                  <Edge From="24" To="25" Label="Source1" />
                  <Edge From="25" To="26" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>HasNoGoGratingFlag</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>NoGoGratingsFlag</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Value" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="StringProperty">
                      <Value>NOGOGRATINGS</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="4" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>NoGoGratingsTrial</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:Timer">
                      <gl:DueTime>PT2S</gl:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Draw</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>NoGoPresented</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:Delay">
                      <gl:DueTime>PT1S</gl:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Lick</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>NoGoPresented</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:TimedGate">
                      <rx:TimeSpan>PT0.1S</rx:TimeSpan>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Amb" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Throttle">
                      <rx:DueTime>PT1S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Throttle">
                      <rx:DueTime>PT2S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>1</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>WaterReward</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="rx:Sink">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item2</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="gl:BindTexture">
                            <gl:TextureSlot>Texture0</gl:TextureSlot>
                            <gl:ShaderName>Image</gl:ShaderName>
                            <gl:TextureTarget>Texture2D</gl:TextureTarget>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item1</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Angle" Selector="Angle" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawGratings.bonsai">
                    <LocationX>0</LocationX>
                    <LocationY>0</LocationY>
                    <Layer>0</Layer>
                    <Angle>0</Angle>
                    <SpatialFrequency>10</SpatialFrequency>
                    <TemporalFrequency>0</TemporalFrequency>
                    <Phase>0</Phase>
                    <SquareWave>false</SquareWave>
                    <Contrast>1</Contrast>
                    <DutyCycle xsi:nil="true" />
                    <Radius>1</Radius>
                    <Aperture>0</Aperture>
                    <Opacity>1</Opacity>
                    <ExtentX>50</ExtentX>
                    <ExtentY>50</ExtentY>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>NoGoPresented</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:TakeUntil" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Last" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>NOGOGRATINGS</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="22" Label="Source2" />
                  <Edge From="1" To="15" Label="Source1" />
                  <Edge From="1" To="20" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="9" Label="Source2" />
                  <Edge From="5" To="7" Label="Source1" />
                  <Edge From="6" To="7" Label="Source2" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="8" To="11" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="25" Label="Source2" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="14" To="15" Label="Source2" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="18" To="19" Label="Source1" />
                  <Edge From="19" To="20" Label="Source1" />
                  <Edge From="20" To="21" Label="Source1" />
                  <Edge From="21" To="22" Label="Source1" />
                  <Edge From="22" To="23" Label="Source1" />
                  <Edge From="23" To="24" Label="Source1" />
                  <Edge From="24" To="25" Label="Source1" />
                  <Edge From="25" To="26" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>HasAudioFlag</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>GratingsCount</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Value" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="GreaterThanOrEqual">
                    <Operand xsi:type="IntProperty">
                      <Value>3</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="3" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>HasGoAudioFlag</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>GoAudioFlag</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Value" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="StringProperty">
                      <Value>GOAUDIO</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="4" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>GoAudioTrial</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:Timer">
                      <gl:DueTime>PT2S</gl:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Draw</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>GoPresented</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:Delay">
                      <gl:DueTime>PT1S</gl:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Lick</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>GoPresented</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:TimedGate">
                      <rx:TimeSpan>PT0.1S</rx:TimeSpan>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Amb" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Throttle">
                      <rx:DueTime>PT1S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Throttle">
                      <rx:DueTime>PT2S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>1</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>WaterReward</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="rx:Sink">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item2</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="gl:BindTexture">
                            <gl:TextureSlot>Texture0</gl:TextureSlot>
                            <gl:ShaderName>Image</gl:ShaderName>
                            <gl:TextureTarget>Texture2D</gl:TextureTarget>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item1</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="al:PlaySource" />
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>GoPresented</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:TakeUntil" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Last" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>GOAUDIO</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="21" Label="Source2" />
                  <Edge From="1" To="15" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="9" Label="Source2" />
                  <Edge From="5" To="7" Label="Source1" />
                  <Edge From="6" To="7" Label="Source2" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="8" To="11" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="24" Label="Source2" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="14" To="15" Label="Source2" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="18" To="19" Label="Source1" />
                  <Edge From="19" To="20" Label="Source1" />
                  <Edge From="20" To="21" Label="Source1" />
                  <Edge From="21" To="22" Label="Source1" />
                  <Edge From="22" To="23" Label="Source1" />
                  <Edge From="23" To="24" Label="Source1" />
                  <Edge From="24" To="25" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>HasNoGoAudioFlag</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>NoGoAudioFlag</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Value" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="StringProperty">
                      <Value>NOGOAUDIO</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="4" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>NoGoAudioTrial</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:Timer">
                      <gl:DueTime>PT2S</gl:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Draw</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>NoGoPresented</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:Delay">
                      <gl:DueTime>PT1S</gl:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Lick</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>NoGoPresented</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:TimedGate">
                      <rx:TimeSpan>PT0.1S</rx:TimeSpan>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Amb" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Throttle">
                      <rx:DueTime>PT1S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Throttle">
                      <rx:DueTime>PT2S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>1</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>WaterReward</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="rx:Sink">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item2</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="gl:BindTexture">
                            <gl:TextureSlot>Texture0</gl:TextureSlot>
                            <gl:ShaderName>Image</gl:ShaderName>
                            <gl:TextureTarget>Texture2D</gl:TextureTarget>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item1</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="al:PlaySource" />
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>NoGoPresented</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:TakeUntil" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Last" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>NOGOAUDIO</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="21" Label="Source2" />
                  <Edge From="1" To="15" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="9" Label="Source2" />
                  <Edge From="5" To="7" Label="Source1" />
                  <Edge From="6" To="7" Label="Source2" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="8" To="11" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="24" Label="Source2" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="14" To="15" Label="Source2" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="18" To="19" Label="Source1" />
                  <Edge From="19" To="20" Label="Source1" />
                  <Edge From="20" To="21" Label="Source1" />
                  <Edge From="21" To="22" Label="Source1" />
                  <Edge From="22" To="23" Label="Source1" />
                  <Edge From="23" To="24" Label="Source1" />
                  <Edge From="24" To="25" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="5" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="17" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="6" To="16" Label="Source1" />
            <Edge From="7" To="10" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source2" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="11" To="14" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="23" Label="Source3" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="23" Label="Source4" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="18" To="21" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="23" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="23" Label="Source2" />
            <Edge From="23" To="24" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>results.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>true</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>true</io:IncludeHeader>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="23" To="26" Label="Source1" />
      <Edge From="23" To="29" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="25" To="28" Label="Source2" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="28" To="31" Label="Source2" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="30" To="31" Label="Source1" />
      <Edge From="31" To="32" Label="Source1" />
      <Edge From="32" To="33" Label="Source1" />
      <Edge From="33" To="46" Label="Source2" />
      <Edge From="34" To="35" Label="Source1" />
      <Edge From="34" To="37" Label="Source1" />
      <Edge From="34" To="39" Label="Source1" />
      <Edge From="35" To="36" Label="Source1" />
      <Edge From="36" To="42" Label="Source1" />
      <Edge From="37" To="38" Label="Source1" />
      <Edge From="38" To="41" Label="Source1" />
      <Edge From="39" To="40" Label="Source1" />
      <Edge From="40" To="41" Label="Source2" />
      <Edge From="41" To="42" Label="Source2" />
      <Edge From="42" To="43" Label="Source1" />
      <Edge From="43" To="44" Label="Source1" />
      <Edge From="44" To="45" Label="Source1" />
      <Edge From="45" To="46" Label="Source1" />
      <Edge From="46" To="47" Label="Source1" />
      <Edge From="48" To="49" Label="Source1" />
      <Edge From="48" To="55" Label="Source1" />
      <Edge From="49" To="50" Label="Source1" />
      <Edge From="50" To="51" Label="Source1" />
      <Edge From="51" To="54" Label="Source1" />
      <Edge From="52" To="58" Label="Source2" />
      <Edge From="53" To="54" Label="Source2" />
      <Edge From="54" To="59" Label="Source1" />
      <Edge From="55" To="56" Label="Source1" />
      <Edge From="56" To="57" Label="Source1" />
      <Edge From="57" To="58" Label="Source1" />
      <Edge From="58" To="59" Label="Source2" />
      <Edge From="59" To="60" Label="Source1" />
      <Edge From="61" To="62" Label="Source1" />
      <Edge From="62" To="65" Label="Source2" />
      <Edge From="63" To="64" Label="Source1" />
      <Edge From="64" To="65" Label="Source1" />
      <Edge From="65" To="66" Label="Source1" />
      <Edge From="67" To="68" Label="Source1" />
      <Edge From="68" To="69" Label="Source1" />
      <Edge From="70" To="71" Label="Source1" />
      <Edge From="72" To="73" Label="Source1" />
      <Edge From="74" To="75" Label="Source1" />
      <Edge From="76" To="77" Label="Source1" />
      <Edge From="78" To="79" Label="Source1" />
      <Edge From="80" To="81" Label="Source1" />
      <Edge From="82" To="83" Label="Source1" />
      <Edge From="84" To="85" Label="Source1" />
      <Edge From="84" To="87" Label="Source1" />
      <Edge From="84" To="90" Label="Source1" />
      <Edge From="85" To="86" Label="Source1" />
      <Edge From="86" To="89" Label="Source2" />
      <Edge From="87" To="88" Label="Source1" />
      <Edge From="88" To="89" Label="Source1" />
      <Edge From="89" To="92" Label="Source2" />
      <Edge From="90" To="91" Label="Source1" />
      <Edge From="91" To="92" Label="Source1" />
      <Edge From="92" To="93" Label="Source1" />
      <Edge From="93" To="94" Label="Source1" />
      <Edge From="94" To="95" Label="Source1" />
      <Edge From="95" To="109" Label="Source2" />
      <Edge From="96" To="97" Label="Source1" />
      <Edge From="96" To="99" Label="Source1" />
      <Edge From="96" To="101" Label="Source1" />
      <Edge From="97" To="98" Label="Source1" />
      <Edge From="98" To="104" Label="Source1" />
      <Edge From="99" To="100" Label="Source1" />
      <Edge From="100" To="103" Label="Source1" />
      <Edge From="101" To="102" Label="Source1" />
      <Edge From="102" To="103" Label="Source2" />
      <Edge From="103" To="104" Label="Source2" />
      <Edge From="104" To="105" Label="Source1" />
      <Edge From="105" To="106" Label="Source1" />
      <Edge From="106" To="107" Label="Source1" />
      <Edge From="107" To="108" Label="Source1" />
      <Edge From="108" To="109" Label="Source1" />
      <Edge From="109" To="110" Label="Source1" />
      <Edge From="110" To="111" Label="Source1" />
      <Edge From="112" To="113" Label="Source1" />
      <Edge From="114" To="115" Label="Source1" />
      <Edge From="116" To="117" Label="Source1" />
      <Edge From="118" To="119" Label="Source1" />
      <Edge From="119" To="120" Label="Source1" />
      <Edge From="120" To="121" Label="Source1" />
      <Edge From="121" To="122" Label="Source1" />
      <Edge From="123" To="124" Label="Source1" />
      <Edge From="124" To="125" Label="Source1" />
      <Edge From="125" To="126" Label="Source1" />
      <Edge From="126" To="127" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>