WorkflowBuilder(Version=2.7.0)
Bonsai.Shaders.CreateWindow
  Width=640
  Height=480
  VSync=On
  SwapSync=false
  ClearColor=Black
  ClearMask="DepthBufferBit ColorBufferBit"
  CursorVisible=true
  Location=nil
  WindowBorder=Resizable
  WindowState=Normal
  DisplayDevice=Primary
  TargetRenderFrequency=0
  TargetUpdateFrequency=nil
  RenderState=""
  GraphicsMode
    ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
    Depth=16
    Stencil=0
    Samples=0
    AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
    Buffers=2
    Stereo=false
-> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
-> Bonsai.Resources.LoadResources
-> WorkflowOutput

Bonsai.Shaders.RenderFrame
-> IncludeWorkflow(Path=BonVision:Environment.OrthographicView.bonsai, Left=-180, Right=180, Bottom=-90, Top=90)
-> PublishSubject Draw
-> IncludeWorkflow(Path=BonVision:Environment.SphereMapping.bonsai, FaceSize=nil, ClearColor=Gray, Width=nil, Height=nil, RotationZ=0, RotationY=0, RotationX=0)
-> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=20, Height=15, Rotation(X=0, Y=0, Z=0), Translation(X=0, Y=0, Z=-10))
-> Disable IncludeWorkflow(Path=BonVision:Environment.GammaCorrection.bonsai, ClearColor=Gray, GammaLut=nil)

Bonsai.Shaders.Timer(DueTime=PT2S, Period=PT3S)
-> SelectMany Trial
    WorkflowInput Source1 => #0
    Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=0, Upper=3)
    -> Bonsai.Numerics.Distributions.Sample => #2
    #0, #2 -> WithLatestFrom
    -> MemberSelector(Selector=Item2) => #4
    -> Condition HasAudio0Flag => #5
        WorkflowInput Source1
        -> Equal(Operand=IntProperty(Value=0))
        -> WorkflowOutput
    -> Condition HasGoFlag
        WorkflowInput Source1 => #0
        SubscribeSubject GoIndex
        -> PropertyMapping(Value) => #2
        #0, #2 -> Equal(Operand=IntProperty(Value=0))
        -> WorkflowOutput
    -> SelectMany GoAudio0Trial => #7
        Bonsai.Shaders.Timer(DueTime=PT2S) => #0
        SubscribeSubject Draw => #1
        SubscribeSubject GoPresented
        -> Bonsai.Shaders.Delay(DueTime=PT1S)
        -> BooleanProperty(Value=false) => #4
        SubscribeSubject Lick => #5
        SubscribeSubject GoPresented => #6
        #5, #6 -> TimedGate(TimeSpan=PT0.1S)
        -> BooleanProperty(Value=true) => #8
        #8, #4 -> Amb
        -> Throttle(DueTime=PT1S) => #10
        #8 -> Throttle(DueTime=PT2S)
        -> IntProperty(Value=1)
        -> BehaviorSubject WaterReward
        SubscribeSubject Audio0 => #14
        #1, #14 -> WithLatestFrom
        -> Sink
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2)
            -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=Image, TextureTarget=Texture2D)
            -> WorkflowOutput
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawGratings.bonsai
          LocationX=0
          LocationY=0
          Layer=0
          Angle=0
          SpatialFrequency=10
          TemporalFrequency=0
          Phase=0
          SquareWave=true
          Contrast=1
          DutyCycle=0.25
          Radius=1
          Aperture=0
          Opacity=1
          ExtentX=1
          ExtentY=1
        -> BehaviorSubject GoPresented => #18
        #18, #0 -> TakeUntil
        -> Last
        -> StringProperty(Value=GO) => #21
        #21, #10 -> Zip
        -> WorkflowOutput
    #5 -> Condition HasNoGoFlag
        WorkflowInput Source1 => #0
        SubscribeSubject GoIndex
        -> PropertyMapping(Value) => #2
        #0, #2 -> Equal(Operand=IntProperty(Value=0))
        -> NotEqual(Operand=BooleanProperty(Value=false))
        -> WorkflowOutput
    -> SelectMany NoGoAudio0Trial => #9
        Bonsai.Shaders.Timer(DueTime=PT2S) => #0
        SubscribeSubject Draw => #1
        SubscribeSubject NoGoPresented
        -> Bonsai.Shaders.Delay(DueTime=PT1S)
        -> BooleanProperty(Value=false) => #4
        SubscribeSubject Lick => #5
        SubscribeSubject NoGoPresented => #6
        #5, #6 -> TimedGate(TimeSpan=PT1S)
        -> BooleanProperty(Value=true) => #8
        #8, #4 -> Amb
        -> Throttle(DueTime=PT1S) => #10
        SubscribeSubject Audio0 => #11
        #1, #11 -> WithLatestFrom
        -> Sink
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2)
            -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=Image, TextureTarget=Texture2D)
            -> WorkflowOutput
        -> MemberSelector(Selector=Item1)
        -> Bonsai.Audio.PlaySource
        -> BehaviorSubject NoGoPresented => #16
        #16, #0 -> TakeUntil
        -> Last
        -> StringProperty(Value=NOGO) => #19
        #19, #10 -> Zip
        -> WorkflowOutput
    #4 -> Condition HasAudio1Flag => #10
        WorkflowInput Source1
        -> Equal(Operand=IntProperty(Value=1))
        -> WorkflowOutput
    -> Condition HasNoGoFlag
        WorkflowInput Source1 => #0
        SubscribeSubject GoIndex
        -> PropertyMapping(Value) => #2
        #0, #2 -> Equal(Operand=IntProperty(Value=0))
        -> NotEqual(Operand=BooleanProperty(Value=false))
        -> WorkflowOutput
    -> SelectMany NoGoAudio1Trial => #12
        Bonsai.Shaders.Timer(DueTime=PT2S) => #0
        SubscribeSubject Draw => #1
        SubscribeSubject NoGoPresented
        -> Bonsai.Shaders.Delay(DueTime=PT1S)
        -> BooleanProperty(Value=false) => #4
        SubscribeSubject Lick => #5
        SubscribeSubject NoGoPresented => #6
        #5, #6 -> TimedGate(TimeSpan=PT1S)
        -> BooleanProperty(Value=true) => #8
        #8, #4 -> Amb
        -> Throttle(DueTime=PT1S) => #10
        SubscribeSubject Audio1 => #11
        #1, #11 -> WithLatestFrom
        -> Sink
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2)
            -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=Image, TextureTarget=Texture2D)
            -> WorkflowOutput
        -> MemberSelector(Selector=Item2)
        -> Bonsai.Audio.PlaySource
        -> BehaviorSubject NoGoPresented => #16
        #16, #0 -> TakeUntil
        -> Last
        -> StringProperty(Value=NOGO) => #19
        #19, #10 -> Zip
        -> WorkflowOutput
    #10 -> Condition HasGoFlag
        WorkflowInput Source1 => #0
        SubscribeSubject GoIndex
        -> PropertyMapping(Value) => #2
        #0, #2 -> Equal(Operand=IntProperty(Value=0))
        -> WorkflowOutput
    -> SelectMany GoAudio1Trial => #14
        Bonsai.Shaders.Timer(DueTime=PT2S) => #0
        SubscribeSubject Draw => #1
        SubscribeSubject GoPresented
        -> Bonsai.Shaders.Delay(DueTime=PT1S)
        -> BooleanProperty(Value=false) => #4
        SubscribeSubject Lick => #5
        SubscribeSubject GoPresented => #6
        #5, #6 -> TimedGate(TimeSpan=PT0.1S)
        -> BooleanProperty(Value=true) => #8
        #8, #4 -> Amb
        -> Throttle(DueTime=PT1S) => #10
        #8 -> Throttle(DueTime=PT2S)
        -> IntProperty(Value=1)
        -> BehaviorSubject WaterReward
        SubscribeSubject Audio1 => #14
        #1, #14 -> WithLatestFrom
        -> Sink
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2)
            -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=Image, TextureTarget=Texture2D)
            -> WorkflowOutput
        -> MemberSelector(Selector=Item1)
        -> Bonsai.Audio.PlaySource
        -> BehaviorSubject GoPresented => #19
        #19, #0 -> TakeUntil
        -> Last
        -> StringProperty(Value=GO) => #22
        #22, #10 -> Zip
        -> WorkflowOutput
    #4 -> Condition HasGratings0Flag => #15
        WorkflowInput Source1
        -> Equal(Operand=IntProperty(Value=2))
        -> WorkflowOutput
    -> Condition HasGoFlag
        WorkflowInput Source1 => #0
        SubscribeSubject GoIndex
        -> PropertyMapping(Value) => #2
        #0, #2 -> Equal(Operand=IntProperty(Value=0))
        -> WorkflowOutput
    -> SelectMany GoGratings0Trial => #17
        Bonsai.Shaders.Timer(DueTime=PT2S) => #0
        SubscribeSubject Draw => #1
        SubscribeSubject GoPresented
        -> Bonsai.Shaders.Delay(DueTime=PT1S)
        -> BooleanProperty(Value=false) => #4
        SubscribeSubject Lick => #5
        SubscribeSubject GoPresented => #6
        #5, #6 -> TimedGate(TimeSpan=PT0.1S)
        -> BooleanProperty(Value=true) => #8
        #8, #4 -> Amb
        -> Throttle(DueTime=PT1S) => #10
        #8 -> Throttle(DueTime=PT2S)
        -> IntProperty(Value=1)
        -> BehaviorSubject WaterReward
        SubscribeSubject Gratings0 => #14
        #1, #14 -> WithLatestFrom
        -> Sink
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2)
            -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=Image, TextureTarget=Texture2D)
            -> WorkflowOutput
        -> MemberSelector(Selector=Item2)
        -> IncludeWorkflow(Path=BonVision:Collections.GratingSequence.bonsai, Phase=0, SquareWave=false, Radius=1, Aperture=0, Opacity=1)
        -> BehaviorSubject GoPresented => #19
        #19, #0 -> TakeUntil
        -> Last
        -> StringProperty(Value=GO) => #22
        #22, #10 -> Zip
        -> WorkflowOutput
    #15 -> Condition HasNoGoFlag
        WorkflowInput Source1 => #0
        SubscribeSubject GoIndex
        -> PropertyMapping(Value) => #2
        #0, #2 -> Equal(Operand=IntProperty(Value=0))
        -> NotEqual(Operand=BooleanProperty(Value=false))
        -> WorkflowOutput
    -> SelectMany NoGoGratings0Trial => #19
        Bonsai.Shaders.Timer(DueTime=PT2S) => #0
        SubscribeSubject Draw => #1
        SubscribeSubject Lick => #2
        SubscribeSubject Gratings0 => #3
        #1, #3 -> WithLatestFrom
        -> Sink
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2)
            -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=Image, TextureTarget=Texture2D)
            -> WorkflowOutput
        -> MemberSelector(Selector=Item2)
        -> IncludeWorkflow(Path=BonVision:Collections.GratingSequence.bonsai, Phase=0, SquareWave=false, Radius=1, Aperture=0, Opacity=1)
        -> BehaviorSubject NoGoPresented => #8
        #8, #0 -> TakeUntil
        -> Last
        -> StringProperty(Value=GO) => #11
        SubscribeSubject NoGoPresented
        -> Bonsai.Shaders.Delay(DueTime=PT1S)
        -> BooleanProperty(Value=false) => #14
        SubscribeSubject NoGoPresented => #15
        #2, #15 -> TimedGate(TimeSpan=PT0.1S)
        -> BooleanProperty(Value=true) => #17
        #17, #14 -> Amb
        -> Throttle(DueTime=PT1S) => #19
        #11, #19 -> Zip
        -> WorkflowOutput
        #17 -> Throttle(DueTime=PT2S)
        -> IntProperty(Value=1)
        -> BehaviorSubject WaterReward
    #4 -> Condition HasGratings1Flag => #20
        WorkflowInput Source1
        -> Equal(Operand=IntProperty(Value=3))
        -> WorkflowOutput
    -> Condition HasGoFlag
        WorkflowInput Source1 => #0
        SubscribeSubject GoIndex
        -> PropertyMapping(Value) => #2
        #0, #2 -> Equal(Operand=IntProperty(Value=0))
        -> WorkflowOutput
    -> SelectMany GoGratings1Trial => #22
        Bonsai.Shaders.Timer(DueTime=PT2S) => #0
        SubscribeSubject Draw => #1
        SubscribeSubject GoPresented
        -> Bonsai.Shaders.Delay(DueTime=PT1S)
        -> BooleanProperty(Value=false) => #4
        SubscribeSubject Lick => #5
        SubscribeSubject GoPresented => #6
        #5, #6 -> TimedGate(TimeSpan=PT0.1S)
        -> BooleanProperty(Value=true) => #8
        #8, #4 -> Amb
        -> Throttle(DueTime=PT1S) => #10
        #8 -> Throttle(DueTime=PT2S)
        -> IntProperty(Value=1)
        -> BehaviorSubject WaterReward
        SubscribeSubject Gratings1 => #14
        #1, #14 -> WithLatestFrom
        -> Sink
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2)
            -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=Image, TextureTarget=Texture2D)
            -> WorkflowOutput
        -> MemberSelector(Selector=Item2)
        -> IncludeWorkflow(Path=BonVision:Collections.GratingSequence.bonsai, Phase=0, SquareWave=false, Radius=1, Aperture=0, Opacity=1)
        -> BehaviorSubject GoPresented => #19
        #19, #0 -> TakeUntil
        -> Last
        -> StringProperty(Value=GO) => #22
        #22, #10 -> Zip
        -> WorkflowOutput
    #20 -> Condition HasNoGoFlag
        WorkflowInput Source1 => #0
        SubscribeSubject GoIndex
        -> PropertyMapping(Value) => #2
        #0, #2 -> Equal(Operand=IntProperty(Value=0))
        -> NotEqual(Operand=BooleanProperty(Value=false))
        -> WorkflowOutput
    -> SelectMany NoGoGratings1Trial => #24
        Bonsai.Shaders.Timer(DueTime=PT2S) => #0
        SubscribeSubject Draw => #1
        SubscribeSubject Lick => #2
        SubscribeSubject NoGoPresented
        -> Bonsai.Shaders.Delay(DueTime=PT1S)
        -> BooleanProperty(Value=false) => #5
        SubscribeSubject NoGoPresented => #6
        #2, #6 -> TimedGate(TimeSpan=PT0.1S)
        -> BooleanProperty(Value=true) => #8
        #8, #5 -> Amb
        -> Throttle(DueTime=PT1S) => #10
        #8 -> Throttle(DueTime=PT2S)
        -> IntProperty(Value=1)
        -> BehaviorSubject WaterReward
        SubscribeSubject Gratings1 => #14
        #1, #14 -> WithLatestFrom
        -> Sink
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2)
            -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=Image, TextureTarget=Texture2D)
            -> WorkflowOutput
        -> MemberSelector(Selector=Item2)
        -> IncludeWorkflow(Path=BonVision:Collections.GratingSequence.bonsai, Phase=0, SquareWave=false, Radius=1, Aperture=0, Opacity=1)
        -> BehaviorSubject NoGoPresented => #19
        #19, #0 -> TakeUntil
        -> Last
        -> StringProperty(Value=GO) => #22
        #22, #10 -> Zip
        -> WorkflowOutput
    #7, #12, #9, #14, #17, #19, #22, #24 -> Merge
    -> WorkflowOutput

    Bonsai.Numerics.CreateRandom(Seed=nil)
    -> AsyncSubject Random
-> GroupWorkflow
    WorkflowInput Source1
    -> WorkflowOutput
-> Timestamp
-> Bonsai.IO.CsvWriter(FileName=results.csv, Append=false, Overwrite=true, Suffix=None, IncludeHeader=true)

Bonsai.Windows.Input.KeyDown(Filter=None, SuppressRepetitions=false)
-> BehaviorSubject Lick
-> Timestamp
-> Bonsai.IO.CsvWriter(FileName=lick_times.csv, Append=false, Overwrite=true, Suffix=None, IncludeHeader=true)

SubscribeSubject Draw
-> BooleanProperty(Value=true)
-> Timestamp
-> Bonsai.IO.CsvWriter(FileName=drawTime.csv, Append=false, Overwrite=true, Suffix=None, IncludeHeader=true)

ExternalizedMapping(Path) => #23
-> Bonsai.IO.EnumerateFiles(Path=stimuli\audio, SearchPattern=0.wav, SearchOption=AllDirectories)
-> CreateObservable LoadAudio
    WorkflowInput Source1
    -> PropertyMapping(FileName)
    -> Bonsai.Audio.AudioReader(FileName=stimuli\audio\0.wav, BufferLength=10, SampleRate=0)
    -> WorkflowOutput
-> Concat
-> ReplaySubject Audio0(BufferSize=nil)
#23 -> Bonsai.IO.EnumerateFiles(Path=stimuli\audio, SearchPattern=1.wav, SearchOption=TopDirectoryOnly)
-> CreateObservable LoadAudio
    WorkflowInput Source1
    -> PropertyMapping(FileName)
    -> Bonsai.Audio.AudioReader(FileName=stimuli\audio\1.wav, BufferLength=10, SampleRate=0)
    -> WorkflowOutput
-> Concat
-> ReplaySubject Audio1(BufferSize=nil)

Bonsai.IO.CsvReader(FileName=stimuli\gratings\0.csv, ListSeparator=",", SkipRows=1)
-> GroupWorkflow LoadGratingsCsv
    WorkflowInput Source1
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        double.Parse(it[0]) * Math.PI / 180 as Orientation,
        double.Parse(it[1]) as Speed,
        double.Parse(it[2]) as Contrast,
        double.Parse(it[3]) as Duration)
    -> InputMapping(Orientation(Selector=Orientation), Contrast(Selector=Contrast), TemporalFrequency(Selector=Speed), Duration(Selector=Duration))
    -> BonVision.Collections.CreateGratingTrial(Delay=0, Duration=1, Diameter=1, X=0, Y=0, Contrast=1, SpatialFrequency=10, TemporalFrequency=0, Orientation=0)
    -> WorkflowOutput
-> ReplaySubject Gratings0(BufferSize=nil)

Bonsai.IO.CsvReader(FileName=stimuli\gratings\1.csv, ListSeparator=",", SkipRows=1)
-> GroupWorkflow LoadGratingsCsv
    WorkflowInput Source1
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        double.Parse(it[0]) * Math.PI / 180 as Orientation,
        double.Parse(it[1]) as Speed,
        double.Parse(it[2]) as Contrast,
        double.Parse(it[3]) as Duration)
    -> InputMapping(Orientation(Selector=Orientation), Contrast(Selector=Contrast), TemporalFrequency(Selector=Speed), Duration(Selector=Duration))
    -> BonVision.Collections.CreateGratingTrial(Delay=0, Duration=1, Diameter=1, X=0, Y=0, Contrast=1, SpatialFrequency=10, TemporalFrequency=0, Orientation=90)
    -> WorkflowOutput
-> ReplaySubject Gratings1(BufferSize=nil)

ExternalizedMapping(Value)
-> IntProperty(Value=0)
-> ReplaySubject GoIndex(BufferSize=nil)
