<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.7.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:Bonsai.Numerics.Distributions;assembly=Bonsai.Numerics"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:al="clr-namespace:Bonsai.Audio;assembly=Bonsai.Audio"
                 xmlns:num="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateWindow">
          <gl:Width>640</gl:Width>
          <gl:Height>480</gl:Height>
          <gl:VSync>On</gl:VSync>
          <gl:SwapSync>false</gl:SwapSync>
          <gl:ClearColor>Black</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:CursorVisible>true</gl:CursorVisible>
          <gl:Location xsi:nil="true" />
          <gl:WindowBorder>Resizable</gl:WindowBorder>
          <gl:WindowState>Normal</gl:WindowState>
          <gl:DisplayDevice>Primary</gl:DisplayDevice>
          <gl:TargetRenderFrequency>0</gl:TargetRenderFrequency>
          <gl:TargetUpdateFrequency xsi:nil="true" />
          <gl:RenderState />
          <gl:GraphicsMode>
            <gl:ColorFormat>
              <gl:Red>8</gl:Red>
              <gl:Green>8</gl:Green>
              <gl:Blue>8</gl:Blue>
              <gl:Alpha>8</gl:Alpha>
            </gl:ColorFormat>
            <gl:Depth>16</gl:Depth>
            <gl:Stencil>0</gl:Stencil>
            <gl:Samples>0</gl:Samples>
            <gl:AccumulatorFormat>
              <gl:Red>0</gl:Red>
              <gl:Green>0</gl:Green>
              <gl:Blue>0</gl:Blue>
              <gl:Alpha>0</gl:Alpha>
            </gl:AccumulatorFormat>
            <gl:Buffers>2</gl:Buffers>
            <gl:Stereo>false</gl:Stereo>
          </gl:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="res:LoadResources" />
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderFrame" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.OrthographicView.bonsai">
        <Left>-180</Left>
        <Right>180</Right>
        <Bottom>-90</Bottom>
        <Top>90</Top>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Draw</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.SphereMapping.bonsai">
        <FaceSize xsi:nil="true" />
        <ClearColor>Gray</ClearColor>
        <Width xsi:nil="true" />
        <Height xsi:nil="true" />
        <RotationZ>0</RotationZ>
        <RotationY>0</RotationY>
        <RotationX>0</RotationX>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.ViewWindow.bonsai">
        <Width>20</Width>
        <Height>15</Height>
        <Rotation>
          <X>0</X>
          <Y>0</Y>
          <Z>0</Z>
        </Rotation>
        <Translation>
          <X>0</X>
          <Y>0</Y>
          <Z>-10</Z>
        </Translation>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="IncludeWorkflow" Path="BonVision:Environment.GammaCorrection.bonsai">
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        </Builder>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="DueTime" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:Timer">
          <gl:DueTime>PT2S</gl:DueTime>
          <gl:Period>PT3S</gl:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>Trial</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>GratingsParams0</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>GratingsParams0</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Random</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:CreateDiscreteUniform">
                <p1:Lower>0</p1:Lower>
                <p1:Upper>3</p1:Upper>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:Sample" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>IsGratingsTrial</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="GreaterThanOrEqual">
                    <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Int64">
                      <Value>2</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>IsGratings0</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Int64">
                      <Value>2</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>IsGo</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>GoIndex</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Value" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Int64">
                      <Value>0</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="3" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>GoGratingsTrial</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:Timer">
                      <gl:DueTime>PT2S</gl:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Draw</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>GoPresented</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:Delay">
                      <gl:DueTime>PT1S</gl:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Lick</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>GoPresented</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:TimedGate">
                      <rx:TimeSpan>PT0.1S</rx:TimeSpan>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Amb" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Throttle">
                      <rx:DueTime>PT1S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Throttle">
                      <rx:DueTime>PT2S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>1</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>WaterReward</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Contrast" Selector="Contrast" />
                      <Property Name="TemporalFrequency" Selector="Speed" />
                      <Property Name="Angle" Selector="Angle" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawGratings.bonsai">
                    <LocationX>0</LocationX>
                    <LocationY>0</LocationY>
                    <Layer>0</Layer>
                    <Angle>90</Angle>
                    <SpatialFrequency>10</SpatialFrequency>
                    <TemporalFrequency>0</TemporalFrequency>
                    <Phase>0</Phase>
                    <SquareWave>false</SquareWave>
                    <Contrast>1</Contrast>
                    <DutyCycle xsi:nil="true" />
                    <Radius>10</Radius>
                    <Aperture>0</Aperture>
                    <Opacity>1</Opacity>
                    <ExtentX>100</ExtentX>
                    <ExtentY>100</ExtentY>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>GoPresented</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:TakeUntil" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Last" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>GO</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="20" Label="Source2" />
                  <Edge From="1" To="15" Label="Source1" />
                  <Edge From="1" To="18" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="9" Label="Source2" />
                  <Edge From="5" To="7" Label="Source1" />
                  <Edge From="6" To="7" Label="Source2" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="8" To="11" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="23" Label="Source2" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="14" To="15" Label="Source2" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="18" To="19" Label="Source1" />
                  <Edge From="19" To="20" Label="Source1" />
                  <Edge From="20" To="21" Label="Source1" />
                  <Edge From="21" To="22" Label="Source1" />
                  <Edge From="22" To="23" Label="Source1" />
                  <Edge From="23" To="24" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>IsNoGo</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>GoIndex</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Value" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="NotEqual">
                    <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Int64">
                      <Value>0</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="3" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>NoGoGratingsTrial</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:Timer">
                      <gl:DueTime>PT2S</gl:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Draw</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>NoGoPresented</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:Delay">
                      <gl:DueTime>PT1S</gl:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Lick</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>NoGoPresented</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:TimedGate">
                      <rx:TimeSpan>PT0.1S</rx:TimeSpan>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Amb" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Throttle">
                      <rx:DueTime>PT1S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Throttle">
                      <rx:DueTime>PT2S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>1</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>WaterReward</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Contrast" Selector="Contrast" />
                      <Property Name="TemporalFrequency" Selector="Speed" />
                      <Property Name="Angle" Selector="Angle" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawGratings.bonsai">
                    <LocationX>0</LocationX>
                    <LocationY>0</LocationY>
                    <Layer>0</Layer>
                    <Angle>5156.62</Angle>
                    <SpatialFrequency>10</SpatialFrequency>
                    <TemporalFrequency>0</TemporalFrequency>
                    <Phase>0</Phase>
                    <SquareWave>false</SquareWave>
                    <Contrast>1</Contrast>
                    <DutyCycle xsi:nil="true" />
                    <Radius>10</Radius>
                    <Aperture>0</Aperture>
                    <Opacity>1</Opacity>
                    <ExtentX>100</ExtentX>
                    <ExtentY>100</ExtentY>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>NoGoPresented</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:TakeUntil" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Last" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>NOGO</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="20" Label="Source2" />
                  <Edge From="1" To="15" Label="Source1" />
                  <Edge From="1" To="18" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="9" Label="Source2" />
                  <Edge From="5" To="7" Label="Source1" />
                  <Edge From="6" To="7" Label="Source2" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="8" To="11" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="23" Label="Source2" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="14" To="15" Label="Source2" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="18" To="19" Label="Source1" />
                  <Edge From="19" To="20" Label="Source1" />
                  <Edge From="20" To="21" Label="Source1" />
                  <Edge From="21" To="22" Label="Source1" />
                  <Edge From="22" To="23" Label="Source1" />
                  <Edge From="23" To="24" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>IsGratings1</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Int64">
                      <Value>3</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>IsGo</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>GoIndex</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Value" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Int64">
                      <Value>0</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="3" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Audio0</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Audio1</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Audio1</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Audio0</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>GratingsParams1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>GoGratingsTrial</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:Timer">
                      <gl:DueTime>PT2S</gl:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Draw</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>GoPresented</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:Delay">
                      <gl:DueTime>PT1S</gl:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Lick</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>GoPresented</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:TimedGate">
                      <rx:TimeSpan>PT0.1S</rx:TimeSpan>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Amb" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Throttle">
                      <rx:DueTime>PT1S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Throttle">
                      <rx:DueTime>PT2S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>1</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>WaterReward</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Contrast" Selector="Contrast" />
                      <Property Name="TemporalFrequency" Selector="Speed" />
                      <Property Name="Angle" Selector="Angle" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawGratings.bonsai">
                    <LocationX>0</LocationX>
                    <LocationY>0</LocationY>
                    <Layer>0</Layer>
                    <Angle>90</Angle>
                    <SpatialFrequency>10</SpatialFrequency>
                    <TemporalFrequency>0</TemporalFrequency>
                    <Phase>0</Phase>
                    <SquareWave>false</SquareWave>
                    <Contrast>1</Contrast>
                    <DutyCycle xsi:nil="true" />
                    <Radius>10</Radius>
                    <Aperture>0</Aperture>
                    <Opacity>1</Opacity>
                    <ExtentX>100</ExtentX>
                    <ExtentY>100</ExtentY>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>GoPresented</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:TakeUntil" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Last" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>GO</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="20" Label="Source2" />
                  <Edge From="1" To="15" Label="Source1" />
                  <Edge From="1" To="18" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="9" Label="Source2" />
                  <Edge From="5" To="7" Label="Source1" />
                  <Edge From="6" To="7" Label="Source2" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="8" To="11" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="23" Label="Source2" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="14" To="15" Label="Source2" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="18" To="19" Label="Source1" />
                  <Edge From="19" To="20" Label="Source1" />
                  <Edge From="20" To="21" Label="Source1" />
                  <Edge From="21" To="22" Label="Source1" />
                  <Edge From="22" To="23" Label="Source1" />
                  <Edge From="23" To="24" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>IsNoGo</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>GoIndex</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Value" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="NotEqual">
                    <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Int64">
                      <Value>0</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="3" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>GratingsParams1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>NoGoGratingsTrial</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:Timer">
                      <gl:DueTime>PT2S</gl:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Draw</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>NoGoPresented</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:Delay">
                      <gl:DueTime>PT1S</gl:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Lick</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>NoGoPresented</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:TimedGate">
                      <rx:TimeSpan>PT0.1S</rx:TimeSpan>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Amb" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Throttle">
                      <rx:DueTime>PT1S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Throttle">
                      <rx:DueTime>PT2S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>1</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>WaterReward</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Contrast" Selector="Contrast" />
                      <Property Name="TemporalFrequency" Selector="Speed" />
                      <Property Name="Angle" Selector="Angle" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawGratings.bonsai">
                    <LocationX>0</LocationX>
                    <LocationY>0</LocationY>
                    <Layer>0</Layer>
                    <Angle>0</Angle>
                    <SpatialFrequency>10</SpatialFrequency>
                    <TemporalFrequency>0</TemporalFrequency>
                    <Phase>0</Phase>
                    <SquareWave>false</SquareWave>
                    <Contrast>1</Contrast>
                    <DutyCycle xsi:nil="true" />
                    <Radius>10</Radius>
                    <Aperture>0</Aperture>
                    <Opacity>1</Opacity>
                    <ExtentX>100</ExtentX>
                    <ExtentY>100</ExtentY>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>NoGoPresented</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:TakeUntil" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Last" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>NOGO</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="20" Label="Source2" />
                  <Edge From="1" To="15" Label="Source1" />
                  <Edge From="1" To="18" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="9" Label="Source2" />
                  <Edge From="5" To="7" Label="Source1" />
                  <Edge From="6" To="7" Label="Source2" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="8" To="11" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="23" Label="Source2" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="14" To="15" Label="Source2" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="18" To="19" Label="Source1" />
                  <Edge From="19" To="20" Label="Source1" />
                  <Edge From="20" To="21" Label="Source1" />
                  <Edge From="21" To="22" Label="Source1" />
                  <Edge From="22" To="23" Label="Source1" />
                  <Edge From="23" To="24" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>IsAudioTrial</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="LessThanOrEqual">
                    <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Int64">
                      <Value>1</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>IsAudio0</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Int64">
                      <Value>0</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>IsGo</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>GoIndex</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Value" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Int64">
                      <Value>0</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="3" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>GoAudioTrial</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:Timer">
                      <gl:DueTime>PT2S</gl:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Draw</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>GoPresented</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:Delay">
                      <gl:DueTime>PT1S</gl:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Lick</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>GoPresented</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:TimedGate">
                      <rx:TimeSpan>PT0.1S</rx:TimeSpan>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Amb" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Throttle">
                      <rx:DueTime>PT1S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Throttle">
                      <rx:DueTime>PT2S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>1</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>WaterReward</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="al:AudioPlayback">
                      <al:SampleRate>44100</al:SampleRate>
                      <al:State>Playing</al:State>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>GoPresented</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:TakeUntil" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Last" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>GO</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="19" Label="Source2" />
                  <Edge From="1" To="15" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="9" Label="Source2" />
                  <Edge From="5" To="7" Label="Source1" />
                  <Edge From="6" To="7" Label="Source2" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="8" To="11" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="22" Label="Source2" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="14" To="15" Label="Source2" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="18" To="19" Label="Source1" />
                  <Edge From="19" To="20" Label="Source1" />
                  <Edge From="20" To="21" Label="Source1" />
                  <Edge From="21" To="22" Label="Source1" />
                  <Edge From="22" To="23" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>IsNoGo</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>GoIndex</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Value" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="NotEqual">
                    <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Int64">
                      <Value>0</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="3" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>NoGoAudioTrial</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:Timer">
                      <gl:DueTime>PT2S</gl:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Draw</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>NoGoPresented</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:Delay">
                      <gl:DueTime>PT1S</gl:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Lick</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>NoGoPresented</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:TimedGate">
                      <rx:TimeSpan>PT0.1S</rx:TimeSpan>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Amb" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Throttle">
                      <rx:DueTime>PT1S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Throttle">
                      <rx:DueTime>PT2S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>1</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>WaterReward</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="al:AudioPlayback">
                      <al:SampleRate>44100</al:SampleRate>
                      <al:State>Playing</al:State>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>NoGoPresented</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:TakeUntil" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Last" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>NOGO</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="19" Label="Source2" />
                  <Edge From="1" To="15" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="9" Label="Source2" />
                  <Edge From="5" To="7" Label="Source1" />
                  <Edge From="6" To="7" Label="Source2" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="8" To="11" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="22" Label="Source2" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="14" To="15" Label="Source2" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="18" To="19" Label="Source1" />
                  <Edge From="19" To="20" Label="Source1" />
                  <Edge From="20" To="21" Label="Source1" />
                  <Edge From="21" To="22" Label="Source1" />
                  <Edge From="22" To="23" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>IsAudio1</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Int64">
                      <Value>1</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>IsGo</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>GoIndex</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Value" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Int64">
                      <Value>0</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="3" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>GoAudioTrial</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:Timer">
                      <gl:DueTime>PT2S</gl:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Draw</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>GoPresented</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:Delay">
                      <gl:DueTime>PT1S</gl:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Lick</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>GoPresented</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:TimedGate">
                      <rx:TimeSpan>PT0.1S</rx:TimeSpan>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Amb" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Throttle">
                      <rx:DueTime>PT1S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Throttle">
                      <rx:DueTime>PT2S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>1</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>WaterReward</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="al:AudioPlayback">
                      <al:SampleRate>44100</al:SampleRate>
                      <al:State>Playing</al:State>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>GoPresented</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:TakeUntil" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Last" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>GO</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="19" Label="Source2" />
                  <Edge From="1" To="15" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="9" Label="Source2" />
                  <Edge From="5" To="7" Label="Source1" />
                  <Edge From="6" To="7" Label="Source2" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="8" To="11" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="22" Label="Source2" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="14" To="15" Label="Source2" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="18" To="19" Label="Source1" />
                  <Edge From="19" To="20" Label="Source1" />
                  <Edge From="20" To="21" Label="Source1" />
                  <Edge From="21" To="22" Label="Source1" />
                  <Edge From="22" To="23" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>IsNoGo</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>GoIndex</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Value" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="NotEqual">
                    <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Int64">
                      <Value>0</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="3" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>NoGoAudioTrial</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:Timer">
                      <gl:DueTime>PT2S</gl:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Draw</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>NoGoPresented</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:Delay">
                      <gl:DueTime>PT1S</gl:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Lick</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>NoGoPresented</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:TimedGate">
                      <rx:TimeSpan>PT0.1S</rx:TimeSpan>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Amb" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Throttle">
                      <rx:DueTime>PT1S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Throttle">
                      <rx:DueTime>PT2S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>1</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>WaterReward</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="al:AudioPlayback">
                      <al:SampleRate>44100</al:SampleRate>
                      <al:State>Playing</al:State>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>NoGoPresented</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:TakeUntil" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Last" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>NOGO</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="19" Label="Source2" />
                  <Edge From="1" To="15" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="9" Label="Source2" />
                  <Edge From="5" To="7" Label="Source1" />
                  <Edge From="6" To="7" Label="Source2" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="8" To="11" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="22" Label="Source2" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="14" To="15" Label="Source2" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="18" To="19" Label="Source1" />
                  <Edge From="19" To="20" Label="Source1" />
                  <Edge From="20" To="21" Label="Source1" />
                  <Edge From="21" To="22" Label="Source1" />
                  <Edge From="22" To="23" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="num:CreateRandom">
                <num:Seed xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>Random</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="6" Label="Source1" />
            <Edge From="1" To="11" Label="Source2" />
            <Edge From="2" To="15" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="7" To="33" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="8" To="18" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="9" To="14" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="52" Label="Source5" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="52" Label="Source6" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="18" To="28" Label="Source1" />
            <Edge From="19" To="25" Label="Source1" />
            <Edge From="20" To="40" Label="Source2" />
            <Edge From="21" To="45" Label="Source2" />
            <Edge From="22" To="49" Label="Source2" />
            <Edge From="23" To="36" Label="Source2" />
            <Edge From="24" To="25" Label="Source2" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="26" To="27" Label="Source1" />
            <Edge From="27" To="52" Label="Source7" />
            <Edge From="28" To="30" Label="Source1" />
            <Edge From="29" To="30" Label="Source2" />
            <Edge From="30" To="31" Label="Source1" />
            <Edge From="31" To="32" Label="Source1" />
            <Edge From="32" To="52" Label="Source8" />
            <Edge From="33" To="34" Label="Source1" />
            <Edge From="33" To="43" Label="Source1" />
            <Edge From="34" To="35" Label="Source1" />
            <Edge From="34" To="39" Label="Source1" />
            <Edge From="35" To="36" Label="Source1" />
            <Edge From="36" To="37" Label="Source1" />
            <Edge From="37" To="38" Label="Source1" />
            <Edge From="38" To="52" Label="Source1" />
            <Edge From="39" To="40" Label="Source1" />
            <Edge From="40" To="41" Label="Source1" />
            <Edge From="41" To="42" Label="Source1" />
            <Edge From="42" To="52" Label="Source2" />
            <Edge From="43" To="44" Label="Source1" />
            <Edge From="43" To="48" Label="Source1" />
            <Edge From="44" To="45" Label="Source1" />
            <Edge From="45" To="46" Label="Source1" />
            <Edge From="46" To="47" Label="Source1" />
            <Edge From="47" To="52" Label="Source3" />
            <Edge From="48" To="49" Label="Source1" />
            <Edge From="49" To="50" Label="Source1" />
            <Edge From="50" To="51" Label="Source1" />
            <Edge From="51" To="52" Label="Source4" />
            <Edge From="52" To="53" Label="Source1" />
            <Edge From="54" To="55" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>results.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>true</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>true</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>None</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>Lick</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>lick_times.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>true</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>true</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Draw</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>true</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>drawTime.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>true</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>true</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Path" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:EnumerateFiles">
          <io:Path>stimuli\audio</io:Path>
          <io:SearchPattern>0.wav</io:SearchPattern>
          <io:SearchOption>AllDirectories</io:SearchOption>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:CreateObservable">
        <Name>LoadAudio</Name>
        <Description />
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="al:AudioReader">
                <al:FileName>stimuli\audio\0.wav</al:FileName>
                <al:BufferLength>10</al:BufferLength>
                <al:SampleRate>0</al:SampleRate>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Concat" />
      </Expression>
      <Expression xsi:type="rx:ReplaySubject">
        <Name>Audio0</Name>
        <rx:BufferSize xsi:nil="true" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:EnumerateFiles">
          <io:Path>stimuli\audio</io:Path>
          <io:SearchPattern>1.wav</io:SearchPattern>
          <io:SearchOption>TopDirectoryOnly</io:SearchOption>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:CreateObservable">
        <Name>LoadAudio</Name>
        <Description />
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="al:AudioReader">
                <al:FileName>stimuli\audio\1.wav</al:FileName>
                <al:BufferLength>10</al:BufferLength>
                <al:SampleRate>0</al:SampleRate>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Concat" />
      </Expression>
      <Expression xsi:type="rx:ReplaySubject">
        <Name>Audio1</Name>
        <rx:BufferSize xsi:nil="true" />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Repeat" />
      </Expression>
      <Expression xsi:type="rx:ReplaySubject">
        <Name>GoIndex</Name>
        <rx:BufferSize xsi:nil="true" />
      </Expression>
      <Expression xsi:type="io:CsvReader">
        <io:FileName>stimuli\gratings\0.csv</io:FileName>
        <io:ListSeparator>,</io:ListSeparator>
        <io:SkipRows>1</io:SkipRows>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>LoadCsvGratings2</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>new(
double.Parse(it[0]) * Math.PI / 180 as Orientation,
double.Parse(it[1]) as Speed,
double.Parse(it[2]) as Contrast,
double.Parse(it[3]) as Duration,
double.Parse(it[4]) as Angle
)</scr:Expression>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Repeat" />
      </Expression>
      <Expression xsi:type="rx:ReplaySubject">
        <Name>GratingsParams0</Name>
        <rx:BufferSize xsi:nil="true" />
      </Expression>
      <Expression xsi:type="io:CsvReader">
        <io:FileName>stimuli\gratings\1.csv</io:FileName>
        <io:ListSeparator>,</io:ListSeparator>
        <io:SkipRows>1</io:SkipRows>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>LoadCsvGratings2</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>new(
double.Parse(it[0]) * Math.PI / 180 as Orientation,
double.Parse(it[1]) as Speed,
double.Parse(it[2]) as Contrast,
double.Parse(it[3]) as Duration,
double.Parse(it[4]) as Angle
)</scr:Expression>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Repeat" />
      </Expression>
      <Expression xsi:type="rx:ReplaySubject">
        <Name>GratingsParams1</Name>
        <rx:BufferSize xsi:nil="true" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="24" To="29" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="30" To="31" Label="Source1" />
      <Edge From="31" To="32" Label="Source1" />
      <Edge From="33" To="34" Label="Source1" />
      <Edge From="34" To="35" Label="Source1" />
      <Edge From="35" To="36" Label="Source1" />
      <Edge From="37" To="38" Label="Source1" />
      <Edge From="38" To="39" Label="Source1" />
      <Edge From="39" To="40" Label="Source1" />
      <Edge From="41" To="42" Label="Source1" />
      <Edge From="42" To="43" Label="Source1" />
      <Edge From="43" To="44" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>